PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1.000,-1.000,-1.000]
  expName = Tymula Experiment
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent Red_Square
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      pos [set every repeat] = (RiskXPos, RedYPos)
      shape = rectangle
      size [set every repeat] = (0.4, RedHeight)
      startVal [time (s)] = 0.0
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    PolygonComponent Blue_Square
      fillColor = $[-1.000,0.004,1.000]
      lineColor = $[-1.000,0.004,1.000]
      pos [set every repeat] = (RiskXPos, BlueYPos)
      shape = rectangle
      size [set every repeat] = (0.4, BlueHeight)
      startVal [time (s)] = 0.0
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    TextComponent sure
      letterHeight = 0.3
      pos [set every repeat] = [SureXPos,0]
      startVal [time (s)] = 0.0
      text [set every repeat] = $Sure
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    TextComponent or_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Option_One
      color = White
      letterHeight = 0.08
      pos [set every repeat] = (OptionOneXPos, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OptionOne
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    TextComponent Option_Two
      color = White
      letterHeight = 0.08
      pos [set every repeat] = (OptionTwoXPos, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OptionTwo
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    TextComponent Risk_Text_Top
      color = White
      letterHeight = 0.08
      pos [set every repeat] = (RiskX, 0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Risk
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    TextComponent Risk_Text_Bottom
      color = White
      letterHeight = 0.08
      pos [set every repeat] = (RiskX, -0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Risk2
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    PolygonComponent Ambiguity_Bar
      fillColor = $[0.004,0.004,0.004]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = AmbiguityLineW
      pos [set every repeat] = (RiskXPos, 0)
      shape = rectangle
      size [set every repeat] = (0.42, AmbiguityBarH)
      startVal [time (s)] = 0.0
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  Routine endscreen
    KeyboardComponent endscreen_keys
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent endscreen_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Please notify the experiment runner that you have completed this portion.
    TextComponent finalscore_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = score
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  Routine instruct_1
    TextComponent instruct_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will be asked to choose between two options.
        One side will have a constant value and the other will have some chance of two different options.
    TextComponent instruct_text_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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    KeyboardComponent instruct_1_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruct_2
    TextComponent instruct_text_3
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      text = One side will have the constant value shown, 5 in this case.
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    TextComponent instruct_text_4
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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    KeyboardComponent instruct_2_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent tut_sure
      letterHeight = 0.3
      pos [set every repeat] = [-0.5,0]
      startVal [time (s)] = 0.0
      text [set every repeat] = 5
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  Routine instruct_3
    ImageComponent Tutbackdrop
      image = TutorialBackground1.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_3_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct_text_5
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      text = The other side will present you with a more complicated choice.
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    TextComponent instruct_text_6
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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  Routine instruct_4
    ImageComponent Tutbackdrop_2
      image = TutorialBackground1.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_4_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct_text_7
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      text = The very top and bottom numbers are the two possible outcomes of this choice.
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    TextComponent instruct_text_8
      letterHeight = 0.05
      pos = (-0.35, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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    ImageComponent TutArrowTop
      image = TutorialArrow
      pos = (0.15, 0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent TutArrowBottom
      image = TutorialArrow
      pos = (0.15, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruct_5
    ImageComponent Tutbackdrop_3
      image = TutorialBackground1.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_5_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct_text_9
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      text = The innermost numbers are the percentage chance of each outcome.
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    TextComponent instruct_text_10
      letterHeight = 0.05
      pos = (-0.35, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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    ImageComponent TutArrowTop_2
      image = TutorialArrow
      pos = (0.15, 0.28)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent TutArrowBottom_2
      image = TutorialArrow
      pos = (0.15, -0.28)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruct_6
    ImageComponent Tutbackdrop_5
      image = TutorialBackground2.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_6_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct_text_11
      letterHeight = 0.05
      pos = (-0.25, 0.25)
      startVal [time (s)] = 0.0
      text = Sometimes a grey bar will obscure the middle of the choice so the exact probabilities of the outcomes are unknown.
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    TextComponent instruct_text_12
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to continue
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    ImageComponent TutArrowTop_3
      image = TutorialArrow
      pos = (0.15, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruct_7
    KeyboardComponent instruct_7_keys
      allowedKeys = 'space', 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct_text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        To choose between the right and left choices use the right and left arrow keys.
        Good luck!
    TextComponent instruct_text_14
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar, right, or left to continue
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Flow
  Routine instruct_1
  Routine instruct_2
  Routine instruct_3
  Routine instruct_4
  Routine instruct_5
  Routine instruct_6
  Routine instruct_7
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TymulaConditionsFinal.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Sure', 5), ('OptionOne', 5), ('OptionTwo', 0), ('Risk', 13), ('Risk2', 87), ('AmbiguityBarH', 0.0), ('Ambiguity', 0), ('SureXPos', -0.5), ('RiskXPos', 0.5), ('OptionOneXPos', 0.5), ('OptionTwoXPos', 0.5), ('RiskX', 0.5), ('RedHeight', 0.09464), ('BlueHeight', 0.63336), ('RedYPos', 0.28), ('BlueYPos', -0.04632), ('AmbiguityLineW', 0)]),
      OrderedDict([('Sure', 5), ('OptionOne', 5), ('OptionTwo', 0), ('Risk', 25), ('Risk2', 75), ('AmbiguityBarH', 0.0), ('Ambiguity', 0), ('SureXPos', 0.5), ('RiskXPos', -0.5), ('OptionOneXPos', -0.5), ('OptionTwoXPos', -0.5), ('RiskX', -0.5), ('RedHeight', 0.182), ('BlueHeight', 0.546), ('RedYPos', 0.231), ('BlueYPos', -0.09), ('AmbiguityLineW', 0)]),
      OrderedDict([('Sure', 5), ('OptionOne', 5), ('OptionTwo', 0), ('Risk', 38), ('Risk2', 62), ('AmbiguityBarH', 0.0), ('Ambiguity', 0), ('SureXPos', -0.5), ('RiskXPos', 0.5), ('OptionOneXPos', 0.5), ('OptionTwoXPos', 0.5), ('RiskX', 0.5), ('RedHeight', 0.27664), ('BlueHeight', 0.45136), ('RedYPos', 0.18368), ('BlueYPos', -0.13732), ('AmbiguityLineW', 0)]),
      OrderedDict([('Sure', 5), ('OptionOne', 5), ('OptionTwo', 0), ('Risk', 50), ('Risk2', 50), ('AmbiguityBarH', 0.0), ('Ambiguity', 0), ('SureXPos', 0.5), ('RiskXPos', -0.5), ('OptionOneXPos', -0.5), ('OptionTwoXPos', -0.5), ('RiskX', -0.5), ('RedHeight', 0.364), ('BlueHeight', 0.364), ('RedYPos', 0.14), ('BlueYPos', -0.181), ('AmbiguityLineW', 0)])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
    Routine trial
  LoopTerminator trials
  Routine endscreen
